# Generated by Configurator on Tue Feb 08 09:16:44 PST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM5,SerialManager,COM5
Device,Camera,PointGrey,Chameleon3 CM3-U3-50S5M_18276799
Device,LEDArduino-Hub,Arduino,Arduino-Hub
Device,LEDArduino-Switch,Arduino,Arduino-Switch
Device,LEDArduino-Shutter,Arduino,Arduino-Shutter
Device,XYStage,ASIStage,XYStage
Device,ZStage,ASIStage,ZStage

# Pre-init settings for devices
Property,Camera,Use Advanced Mode?,Yes
Property,LEDArduino-Hub,Logic,Normal
Property,LEDArduino-Hub,Port,COM5
Property,XYStage,Port,COM6
Property,ZStage,Port,COM6
Property,ZStage,Axis,Z

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1

# Hub (parent) references
Parent,LEDArduino-Switch,LEDArduino-Hub
Parent,LEDArduino-Shutter,LEDArduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,1

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,LEDArduino-Shutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# LEDArduino-Switch
Label,LEDArduino-Switch,2,625nm
Label,LEDArduino-Switch,1,365nm

# Configuration presets
# Group: Channel
# Preset: DeepBlue
ConfigGroup,Channel,DeepBlue,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,DeepBlue,LEDArduino-Switch,Label,365nm

# Preset: FarRed
ConfigGroup,Channel,FarRed,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,FarRed,LEDArduino-Switch,Label,625nm


# Group: System
# Preset: Startup



# PixelSize settings