# Generated by Configurator on Wed Aug 22 12:08:27 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM1,SerialManager,COM1
Device,ZeissScope,ZeissCAN29,ZeissScope
Device,ZeissReflectorTurret,ZeissCAN29,ZeissReflectorTurret
Device,ZeissObjectiveTurret,ZeissCAN29,ZeissObjectiveTurret
Device,ZeissFieldDiaphragm,ZeissCAN29,ZeissFieldDiaphragm
Device,ZeissFocusAxis,ZeissCAN29,ZeissFocusAxis
Device,ZeissXYStage,ZeissCAN29,ZeissXYStage
Device,ZeissSidePort,ZeissCAN29,ZeissSidePort
Device,ZeissReflectedLightShutter,ZeissCAN29,ZeissReflectedLightShutter
Device,Camera,PointGrey,Chameleon3 CM3-U3-50S5M_16401327
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,Arduino-Input,Arduino,Arduino-Input

# Pre-init settings for devices
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,57600
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,0
Property,COM1,AnswerTimeout,2000
Property,COM1,BaudRate,57600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,ZeissScope,AnswerTimeOut,2000.0000
Property,ZeissScope,Port,COM1
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM9
Property,Arduino-Input,Pin,All
Property,Arduino-Input,Pull-Up-Resistor,On
Property,Camera,Use Advanced Mode?,Yes

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub
Parent,Arduino-Input,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,Arduino-Shutter
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# ZeissReflectorTurret
Label,ZeissReflectorTurret,5,6- 
Label,ZeissReflectorTurret,4,5- 
Label,ZeissReflectorTurret,3,4-78 CP/FP
Label,ZeissReflectorTurret,2,3- 
Label,ZeissReflectorTurret,1,2- 
Label,ZeissReflectorTurret,0,1-62 B/G/HR
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,5,6-Plan-Apochromat 63x/1.40 Oil M27
Label,ZeissObjectiveTurret,4,5-EC Plan-Neofluar 40x/1.30 Oil M27
Label,ZeissObjectiveTurret,3,4-EC Plan-Neofluar 100x/1.30 Oil M27
Label,ZeissObjectiveTurret,2,3-Objektiv3
Label,ZeissObjectiveTurret,1,2-EC Plan-Neofluar 10x/0.48 Ph 1
Label,ZeissObjectiveTurret,0,1-EC Plan-Neofluar 20x/0.8 Ph 1
# ZeissSidePort
Label,ZeissSidePort,2,3-100%R
Label,ZeissSidePort,1,2-Left100
Label,ZeissSidePort,0,1-100%BP
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,FarRed
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,DeepBlue
Label,Arduino-Switch,1,AutoFocus
Label,Arduino-Switch,0,0

# Configuration presets
# Group: Channel
# Preset: Brightfield
ConfigGroup,Channel,Brightfield,ZeissReflectorTurret,Label,1-62 B/G/HR
ConfigGroup,Channel,Brightfield,ZeissReflectorTurret,State,0
ConfigGroup,Channel,Brightfield,Arduino-Switch,Label,0
ConfigGroup,Channel,Brightfield,Core,Shutter,Arduino-Shutter

# Preset: FarRed
ConfigGroup,Channel,FarRed,Arduino-Switch,Label,FarRed
ConfigGroup,Channel,FarRed,ZeissReflectorTurret,Label,1-62 B/G/HR
ConfigGroup,Channel,FarRed,ZeissReflectorTurret,State,0
ConfigGroup,Channel,FarRed,Core,Shutter,Arduino-Shutter

# Preset: DeepBlue
ConfigGroup,Channel,DeepBlue,Arduino-Switch,Label,DeepBlue
ConfigGroup,Channel,DeepBlue,ZeissReflectorTurret,Label,1-62 B/G/HR
ConfigGroup,Channel,DeepBlue,ZeissReflectorTurret,State,0
ConfigGroup,Channel,DeepBlue,Core,Shutter,Arduino-Shutter

# Preset: AutoFocus
ConfigGroup,Channel,AutoFocus,Arduino-Switch,Label,AutoFocus
ConfigGroup,Channel,AutoFocus,ZeissReflectorTurret,Label,1-62 B/G/HR
ConfigGroup,Channel,AutoFocus,ZeissReflectorTurret,State,0
ConfigGroup,Channel,AutoFocus,Core,Shutter,Arduino-Shutter

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,ZeissFieldDiaphragm,mm,9.5632
ConfigGroup,System,Startup,ZeissFocusAxis,Velocity-Acceleration,Default
ConfigGroup,System,Startup,ZeissXYStage,Acceleration (micron/s^2),2000.0000
ConfigGroup,System,Startup,ZeissXYStage,Move Mode,Bidirectional Precision Always
ConfigGroup,System,Startup,ZeissXYStage,TransposeMirrorY,0
ConfigGroup,System,Startup,ZeissXYStage,Velocity (micron/s),3000.0000
ConfigGroup,System,Startup,ZeissXYStage,Velocity-Acceleration,Smooth
ConfigGroup,System,Startup,ZeissSidePort,Label,3-100%R
ConfigGroup,System,Startup,Core,TimeoutMs,30000
ConfigGroup,System,Startup,ZeissReflectedLightShutter,State,1
ConfigGroup,System,Startup,Core,ChannelGroup,Channel
ConfigGroup,System,Startup,ZeissFocusAxis,Move Mode,Bidirectional Precision suppress small upwards

# PixelSize settings
# Resolution preset: 4x
ConfigPixelSize,4x,ZeissObjectiveTurret,Label,3-Objektiv3
PixelSize_um,4x,0.99

# Resolution preset: 10x
ConfigPixelSize,10x,ZeissObjectiveTurret,Label,2-EC Plan-Neofluar 10x/0.48 Ph 1
PixelSize_um,10x,0.495

# Resolution preset: 20x
ConfigPixelSize,20x,ZeissObjectiveTurret,Label,1-EC Plan-Neofluar 20x/0.8 Ph 1
PixelSize_um,20x,0.2475

# Resolution preset: 40x
ConfigPixelSize,40x,ZeissObjectiveTurret,Label,5-EC Plan-Neofluar 40x/1.30 Oil M27
PixelSize_um,40x,0.1237

# Resolution preset: 63x
ConfigPixelSize,63x,ZeissObjectiveTurret,Label,6-Plan-Apochromat 63x/1.40 Oil M27
PixelSize_um,63x,0.0785